PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'make up a name', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = meta_vpr
  keyboardBackend = PsychToolbox
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Routines
  Routine instructions
    TextComponent text_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be shown several videos and images and asked a series of questions. The first task is to watch videos of a robot attempt to reach an orange cone and then answer after each video a question about the robot's performance.

        The second task is to look at an image of the robot start state and decide if the robot will reach the cone. You will be asked to answer whether the robot would reach the cone, yes/no, and what is you confidence in your response.

        Press any key to begin.
    KeyboardComponent key_resp_inst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine match
  Routine confidence
    TextComponent text_confidence
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How confident are you?

        'Not confident at all' (press '1')
        'Somewhat not confident' (press '2')
        'Neutral' (press '3')
        'Somewhat confident' (press '4')
        'Very confident' (press '5')
    KeyboardComponent key_resp_confidence
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That's it. Well done on completing the experiment.

        Please follow this link to get paid:



        And thank you very much for your time.
    KeyboardComponent key_resp_thanks
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine choose
    ImageComponent image
      image [set every repeat] = $img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine begin_expt
    TextComponent text_mid
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be shown an image of the same robot and environment. Your job is to decide whether the robot will be able to reach the goal and your confidence in this decision.

        Press any button to proceed.
    KeyboardComponent key_resp_mid
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixate
    TextComponent fixate_middle
      letterHeight = 0.1
      pos = (0.0, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Binary
    TextComponent Goal_reached
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Was the robot able to reach the goal?

        enter 'y' for yes and 'n' for no.
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine video
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $video
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine Binary2
    TextComponent Question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Would the robot be able to get to the cone frome here?

        enter 'y' for yes and 'n' for no.
    KeyboardComponent yes_no
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine instructions
  LoopInitiator practice_trials loopType="TrialHandler"
    Selected rows = 100:108
    conditionsFile = vpr_stimuli1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'number': 1, 'id': 1, 'video': 'imgs/new0003.png', 'img': '../recordings/1/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 2, 'id': 2, 'video': 'imgs/new0005.png', 'img': '../recordings/2/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 3, 'id': 3, 'video': 'imgs/new0010.png', 'img': '../recordings/3/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 4, 'id': 4, 'video': 'imgs/new0012.png', 'img': '../recordings/4/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 5, 'id': 5, 'video': 'imgs/new0015.png', 'img': '../recordings/5/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 6, 'id': 6, 'video': 'imgs/new0026.png', 'img': '../recordings/6/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 7, 'id': 7, 'video': 'imgs/new0038.png', 'img': '../recordings/7/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 8, 'id': 8, 'video': 'imgs/new0040.png', 'img': '../recordings/8/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None}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
    Routine fixate
    Routine video
    Routine Binary
  LoopTerminator practice_trials
  Routine begin_expt
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = vpr_stimuli1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'number': 1, 'id': 1, 'video': 'imgs/new0003.png', 'img': '../recordings/1/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 2, 'id': 2, 'video': 'imgs/new0005.png', 'img': '../recordings/2/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 3, 'id': 3, 'video': 'imgs/new0010.png', 'img': '../recordings/3/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 4, 'id': 4, 'video': 'imgs/new0012.png', 'img': '../recordings/4/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 5, 'id': 5, 'video': 'imgs/new0015.png', 'img': '../recordings/5/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 6, 'id': 6, 'video': 'imgs/new0026.png', 'img': '../recordings/6/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 7, 'id': 7, 'video': 'imgs/new0038.png', 'img': '../recordings/7/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None},
      {'number': 8, 'id': 8, 'video': 'imgs/new0040.png', 'img': '../recordings/8/first_frame.png', 'match': 1, 'NOTES': 'new, old', 'debug': 'match', 'type': 'test', 'note': None}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
    Routine choose
    Routine Binary2
    Routine confidence
  LoopTerminator trials
  Routine thanks
